config:
  title: Aquarium Thermocycler Models
  description: Models for standardizing usage of thermocyclers
  copyright: University of Washington
  version: 0.1.2
  authors: [{name: Devin Strickland, affiliation: University of Washington}, {name: Eriberto Lopez, affiliation: University of Washington}]
  maintainer: {name: Devin Strickland, email: strcklnd@uw.edu}
  acknowledgements: [{name: Ben Keller, affiliation: University of Washington}]
  github: {user: dvnstrcklnd, repo: aq-thermocyclers, organization: klavinslab}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
operation_type: PCR Test
category: Test
deployed: false
on_the_fly: false
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protocol:
# frozen_string_literal: true

needs 'PCR Libs/PCRComposition'
needs 'PCR Libs/PCRProgram'
needs 'Thermocyclers/Thermocyclers'

class Protocol
  include ThermocyclerHelper

  def main
    composition = PCRCompositionFactory.build(
      program_name: 'qPCR1'
    )
    program = PCRProgramFactory.build(
      program_name: 'qPCR1',
      volume: composition.volume
    )

    show do
      title 'Composition and Program Test'

      note 'From the PCRProgram'
      table program.table
      note 'From the PCRComposition'
      note "Total volume: #{composition.volume}"
    end

    thermocycler = ThermocyclerFactory.build(
      model: TestThermocycler::MODEL
    )

    if thermocycler.respond_to?(:set_dye)
      show do
        title 'Thermocycler Test'

        note 'Template files:'
        note thermocycler.program_template_file(program: program)
        note thermocycler.layout_template_file(program: program)

        note 'Test image path:'
        note thermocycler.open_software_image
      end

      set_up_program(
        thermocycler: thermocycler,
        program: program,
        composition: composition,
        qpcr: true
      )

      export_measurements(thermocycler: thermocycler)
    end

    load_plate_and_start_run(
      thermocycler: thermocycler,
      experiment_filename: 'test_filename'
    )

    {}
  end
end

test:
class ProtocolTest < ProtocolTestBase

  def setup

      add_random_operations(3)

  end

  def analyze
      log('Hello from Nemo')
      assert_equal(@backtrace.last[:operation], 'complete')
  end

end

library: {name: AbstractThermocycler, category: Thermocyclers}
code_source:
# frozen_string_literal: true

# Abstract PCR thermocycler
#
# @author Devin Strickland <strcklnd@uw.edu>
class AbstractThermocycler
  # CONSTANTS that really shouldn't ever change
  # Should be overriden in concrete class
  MODEL = ''
  PROGRAM_EXT = ''

  private_constant :MODEL, :PROGRAM_EXT

  attr_reader :params

  # Instantiates the class and sets the `@params` insteance variable
  #
  # @return [Thermocycler]
  def initialize
    @params = default_params.update(user_defined_params)
  end

  # Lab-specific, user-defined parameters
  #
  # @note Should be overriden in concrete class
  # @return [Hash]
  def user_defined_params
    {}
  end

  ########## Language Methods
  # These methods are not very specific and will probably need to be overridden
  #   in the concrete classes.

  # Instructions for turning on the thermocycler
  #
  # @return [String]
  def turn_on
    "Turn on the #{model}"
  end

  # Instructions for placing a plate in the instrument
  #
  # @param plate [Collection]
  # @return [String]
  def place_plate_in_instrument(plate:)
    "Place plate #{plate} in the thermocycler"
  end

  # Instructions for confirming the orientation of a plate in the instrument
  #
  # @return [String]
  def confirm_plate_orientation
    'MAKE SURE THAT THE PLATE IS IN THE CORRECT ORIENTATION'
  end

  # Instructions for selecting the PCR program template
  #
  # @param program [PCRProgram]
  # @return [String]
  def select_program_template(program:)
    file = program_template_file(program: program)
    "Choose the program template <b>#{file}</b>"
  end

  # Instructions for opening the lid
  #
  # @return [String]
  def open_lid
    'Click the <b>Open Lid</b> button'
  end

  # Instructions for closing the lid
  #
  # @return [String]
  def close_lid
    'Click the <b>Close Lid</b> button'
  end

  # Instructions for starting the run
  #
  # @return [String]
  def start_run
    'Click the <b>Start Run</b> button'
  end

  ########## Image Methods
  # These probably should NOT be overridden in the concrete classes

  # Image for opening the lid
  #
  # @return [String]
  def open_lid_image
    image_path(image_name: params[:open_lid_image])
  end

  # Image for closing the lid
  #
  # @return [String]
  def close_lid_image
    image_path(image_name: params[:close_lid_image])
  end

  # Image for selecting the PCR program template in the software
  #
  # @return [String]
  def setup_program_image
    image_path(image_name: params[:setup_program_image])
  end

  # Image for starting the run
  #
  # @return [String]
  def start_run_image
    image_path(image_name: params[:start_run_image])
  end

  ########## Template File Methods
  # These probably should NOT be overridden in the concrete classes

  def program_template_file(program:)
    template_file(
      template_name: program.program_template_name,
      extension: :PROGRAM_EXT
    )
  end

  ########## Getter Methods
  # These should NOT be overridden in the concrete classes

  # The model of the thermocycler
  #
  # @return [String]
  def model
    self.class.const_get(:MODEL)
  end

  private

  def default_params
    params = {
      experiment_filepath: '',
      export_filepath: '',
      image_path: '',
      setup_program_image: 'setup_program.png',
      open_lid_image: 'open_lid.png',
      close_lid_image: 'close_lid.png',
      start_run_image: 'start_run.png'
    }
    params.update(default_qpcr_params)
    params
  end

  def default_qpcr_params
    {
      # This space intentionally left blank
    }
  end

  def image_path(image_name:)
    File.join(params[:image_path], image_name)
  end

  def template_file(template_name:, extension:)
    ext = self.class.const_get(extension)
    if extension.present?
      (template_name + '.' + ext).gsub(/\.+/, '.')
    else
      template_name
    end
  end

  def format_show_array(ary)
    ary.join('<br>')
  end
end

# Module that provides qPCR-specific methods for thermocyclers
#
# @author Devin Strickland <strcklnd@uw.edu>
module QPCRMixIn
  # CONSTANTS that really shouldn't ever change
  # Should be overriden in concrete class
  LAYOUT_EXT =  ''
  SOFTWARE_NAME = 'thermocycler software'

  private_constant :LAYOUT_EXT, :SOFTWARE_NAME

  ########## Language Methods
  # These methods are not very specific and will probably need to be overridden
  #   in the concrete classes.

  # Instructions for opening the software that controls the thermocycler
  #
  # @return [String]
  def open_software
    "Open #{software_name}"
  end

  # Instructions for setting the dye channel on a qPCR thermocycler
  #
  # @param composition [PCRComposition]
  # @param dye_name [String] can be supplied instead of a `PCRComposition`
  # @return [String]
  def set_dye(composition: nil, dye_name: nil)
    dye_name = composition.dye.try(:input_name) || dye_name
    "Choose <b>#{dye_name}</b> as the dye"
  end

  # Instructions for selecting the plate layout template in the software
  #
  # @param program [PCRProgram]
  # @return [String]
  def select_layout_template(program:)
    file = layout_template_file(program: program)
    "Choose the layout template <b>#{file}</b>"
  end

  # Instructions for saving an experiment file
  #
  # @param filename [String] the name of the file (without the full path)
  # @return [String]
  def save_experiment_file(filename:)
    "Save the experiment as #{filename} in #{params[:experiment_filepath]}"
  end

  # Instructions for exporting measurements from a qPCR run
  #
  # @return [String]
  def export_measurements
    'Click <b>Export</b><br>' \
      'Select <b>Export All Data Sheets</b><br>' \
      'Export all sheets as CSV<br>' \
      "Save files to the #{params[:export_filepath]} directory"
  end

  ########## Image Methods
  # These probably should NOT be overridden in the concrete classes

  # Image for launching the software that controls the thermocycler
  #
  # @return [String]
  def open_software_image
    image_path(image_name: params[:open_software_image])
  end

  # Image for setting up the software workspace
  #
  # @return [String]
  def setup_workspace_image
    image_path(image_name: params[:setup_workspace_image])
  end

  # Image for selecting the plate layout template in the software
  #
  # @return [String]
  def setup_plate_layout_image
    image_path(image_name: params[:setup_plate_layout_image])
  end

  # Image for exporting measurements from a qPCR run
  #
  # @return [String]
  def export_measurements_image
    image_path(image_name: params[:export_measurements_image])
  end

  ########## Template File Methods
  # These probably should NOT be overridden in the concrete classes

  def layout_template_file(program:)
    template_file(
      template_name: program.layout_template_name,
      extension: :LAYOUT_EXT
    )
  end

  ########## Getter Methods
  # These should NOT be overridden in the concrete classes

  # The name of the software that controls the thermocycler
  #
  # @return [String]
  def software_name
    self.class.const_get(:SOFTWARE_NAME)
  end

  private

  def default_qpcr_params
    {
      open_software_image: 'open_software.png',
      setup_workspace_image: 'setup_workspace.png',
      setup_plate_layout_image: 'setup_plate_layout.png',
      export_measurements_image: 'export_measurements.png'
    }
  end
end

library: {name: BioRadCFX96, category: Thermocyclers}
code_source:
# frozen_string_literal: true

needs 'Thermocyclers/AbstractThermocycler'

# Class for handling BioRad CFX96 qPCR thermocycler
#
# @author Devin Strickland <strcklnd@uw.edu>
# @author Eriberto Lopez <elopez3@uw.edu>
# @note BioRad module originally deployed as `QPCR_ThermocyclerLib`
#   on UW BIOFAB production 10/05/18
class BioRadCFX96 < AbstractThermocycler
  include QPCRMixIn

  MODEL = 'BioRad CFX96'
  PROGRAM_EXT = '.prcl'
  LAYOUT_EXT =  '.pltd'
  SOFTWARE_NAME = 'CFX Manager Software'

  # Instantiates the class
  #
  # @return [BioRadCFX96]
  def initialize
    super()
  end

  # Lab-specific, user-defined parameters
  #
  # @return [Hash]
  def user_defined_params
    {
      experiment_filepath: 'Desktop/_qPCR_UWBIOFAB',
      export_filepath: 'Desktop/BIOFAB qPCR Exports',
      image_path: 'Actions/BioRad_qPCR_Thermocycler',
      open_software_image: 'open_biorad_thermo_workspace.JPG',
      setup_workspace_image: 'setup_workspace.JPG',
      setup_program_image: 'setting_up_qPCR_thermo_conditions.png',
      setup_plate_layout_image: 'setting_up_plate_layout_v1.png',
      open_lid_image: 'open_lid.png',
      close_lid_image: 'close_lid.png',
      start_run_image: 'start_run.png',
      export_measurements_image: 'exporting_qPCR_quantification.png'
    }
  end

  ########## Language Methods
  # These methods are not very specific and will probably need to be overridden
  #   in the concrete classes.

  # Instructions for turning on the thermocycler
  #
  # @return [String]
  def turn_on
    'If the thermocycler is off, toggle the power switch in the back of the' \
    ' instrument'
  end

  # Instructions for opening the software that controls the thermocycler
  #
  # @return [String]
  def open_software
    "Open #{software_name}"
  end

  # Instructions for setting the dye channel on a qPCR thermocycler
  #
  # @param composition [PCRComposition]
  # @param dye_name [String] can be supplied instead of a `PCRComposition`
  # @return [String]
  # @todo should be moved to MixIn
  def set_dye(composition: nil, dye_name: nil)
    dye_name = composition.dye.try(:input_name) || dye_name
    "Click on the <b>PrimePCR</b> and choose <b>#{dye_name}</b> as the dye"
  end

  # Instructions for selecting the PCR program template in the software
  #
  # @param program [PCRProgram]
  # @return [String]
  def select_program_template(program:)
    file = program_template_file(program: program)
    "Choose the program template <b>#{file}</b>"
  end

  # Instructions for selecting the plate layout template in the software
  #
  # @param program [PCRProgram]
  # @return [String]
  def select_layout_template(program:)
    file = layout_template_file(program: program)
    "Choose the layout template <b>#{file}</b>"
  end

  # Instructions for placing a plate in the instrument
  #
  # @param plate [Collection]
  # @return [String]
  def place_plate_in_instrument(plate:)
    "Place plate #{plate} in the thermocycler"
  end

  # Instructions for confirming the orientation of a plate in the instrument
  #
  # @return [String]
  def confirm_plate_orientation
    'MAKE SURE THAT THE PLATE IS IN THE CORRECT ORIENTATION'
  end

  # Instructions for opening the lid
  #
  # @return [String]
  def open_lid
    'Click the <b>Open Lid</b> button'
  end

  # Instructions for closing the lid
  #
  # @return [String]
  def close_lid
    'Click the <b>Close Lid</b> button'
  end

  # Instructions for starting the run
  #
  # @return [String]
  def start_run
    'Click the <b>Start Run</b> button'
  end

  # Instructions for saving an experiment file
  #
  # @param filename [String] the name of the file (without the full path)
  # @return [String]
  def save_experiment_file(filename:)
    "Save the experiment as #{filename} in #{params[:experiment_filepath]}"
  end

  # Instructions for exporting measurements from a qPCR run
  #
  # @return [String]
  def export_measurements
    'Click <b>Export</b><br>' \
      'Select <b>Export All Data Sheets</b><br>' \
      'Export all sheets as CSV<br>' \
      "Save files to the #{params[:export_filepath]} directory"
  end
end

library: {name: MiniPCRMini16, category: Thermocyclers}
code_source:
# frozen_string_literal: true

needs 'Thermocyclers/AbstractThermocycler'

# miniPCR mini16
# minipcrbio.com
#
# @author Devin Strickland <strcklnd@uw.edu>
# @todo This is a complicated class because it is a software driven
#   thermocycler that can be run on a variety of desktop or mobile
#   platforms.
class MiniPCRMini16 < AbstractThermocycler
  # CONSTANTS that really shouldn't ever change
  MODEL = 'miniPCR mini16'

  # Instantiates the class
  #
  # @return [ThermocyclerTemplate]
  def initialize
    super()
  end

  # Lab-specific, user-defined parameters
  #
  # @return [Hash]
  def user_defined_params
    {
      experiment_filepath: 'Desktop/my_experiment_path',
      export_filepath: 'Desktop/my_export_path',
      image_path: 'Actions/MiniPCRMini16'
    }
  end

  ########## Language Methods
  # These methods are not very specific and will probably need to be overridden
  #   in the concrete classes.

  # Instructions for turning on the thermocycler
  #
  # @return [String]
  def turn_on
    format_show_array([
      'Connect the miniPCR thermal cycler via USB cable or Bluetooth',
      "Turn on the #{MODEL} using the on/off switch on the back of the unit"
    ])
  end

  # Instructions for placing a plate in the instrument
  #
  # @param plate [Collection]
  # @return [String]
  def place_plate_in_instrument(plate:)
    'Load the PCR tubes into the metal block'
  end

  # Instructions for confirming the orientation of a plate in the instrument
  #
  # @return [String]
  def confirm_plate_orientation
    ''
  end

  # Instructions for selecting the PCR program template
  #
  # @param program [PCRProgram]
  # @return [String]
  def select_program_template(program:)
    file = program_template_file(program: program)
    "Select the #{file} protocol from the Library"
  end

  # Instructions for opening the lid
  #
  # @return [String]
  def open_lid
    format_show_array([
      'Open the lid by pinching the side tabs on the front plate of the miniPCR',
      'Use your thumb and index fingers to pinch, and lift the lid with your other hand'
    ])
  end

  # Instructions for closing the lid
  #
  # @return [String]
  def close_lid
    format_show_array([
      'Fully untwist (counterclockwise) the adjustment knob',
      'Press the lid down until it clicks shut',
      'Tighten the adjustment knob (clockwise) until you feel light resistance from the tube caps',
      'Be careful not to over-tighten'
    ])
  end

  # Instructions for starting the run
  #
  # @return [String]
  def start_run
    format_show_array([
      'Click the <b>Run</b> button',
      'The run will automatically begin, signaled by the green LED turning on'
    ])
  end

  def setup_program_image; end
end

library: {name: QPCRThermocyclerTemplate, category: Thermocyclers}
code_source:
# frozen_string_literal: true

needs 'Thermocyclers/AbstractThermocycler'

# Template for making new qPCR thermocycler classes
#
# @author Devin Strickland <strcklnd@uw.edu>
class ThermocyclerTemplate < AbstractThermocycler
  # CONSTANTS that really shouldn't ever change
  MODEL = ''
  PROGRAM_EXT = ''
  LAYOUT_EXT =  ''
  SOFTWARE_NAME = ''

  # Instantiates the class
  #
  # @return [ThermocyclerTemplate]
  def initialize
    super()
  end

  # Lab-specific, user-defined parameters
  #
  # @return [Hash]
  def user_defined_params
    {
      experiment_filepath: 'Desktop/my_experiment_path',
      export_filepath: 'Desktop/my_export_path',
      image_path: 'Actions/ThermocyclerTemplate'
    }
  end

  ########## Language Methods
  # These methods are not very specific and will probably need to be overridden
  #   in the concrete classes.

  # # Instructions for turning on the thermocycler
  # #
  # # @return [String]
  # def turn_on()
  #   "Turn on the #{model}"
  # end

  # # Instructions for opening the software that controls the thermocycler
  # #
  # # @return [String]
  # def open_software()
  #   "Open #{software_name}"
  # end

  # # Instructions for setting the dye channel on a qPCR thermocycler
  # #
  # # @param composition [PCRComposition]
  # # @param dye_name [String] can be supplied instead of a `PCRComposition`
  # # @return [String]
  # # @todo should be moved to MixIn
  # def set_dye(composition: nil, dye_name: nil)
  #   dye_name = composition.dye.try(:input_name) || dye_name
  #   "Choose <b>#{dye_name}</b> as the dye"
  # end

  # # Instructions for selecting the PCR program template in the software
  # #
  # # @param program [PCRProgram]
  # # @return [String]
  # def select_program_template(program:)
  #   file = program_template_file(program: program)
  #   "Choose the program template <b>#{file}</b>"
  # end

  # # Instructions for selecting the plate layout template in the software
  # #
  # # @param program [PCRProgram]
  # # @return [String]
  # def select_layout_template(program:)
  #   file = layout_template_file(program: program)
  #   "Choose the layout template <b>#{file}</b>"
  # end

  # # Instructions for placing a plate in the instrument
  # #
  # # @param plate [Collection]
  # # @return [String]
  # def place_plate_in_instrument(plate:)
  #   "Place plate #{plate} in the thermocycler"
  # end

  # # Instructions for confirming the orientation of a plate in the instrument
  # #
  # # @return [String]
  # def confirm_plate_orientation()
  #   "MAKE SURE THAT THE PLATE IS IN THE CORRECT ORIENTATION"
  # end

  # # Instructions for opening the lid
  # #
  # # @return [String]
  # def open_lid()
  #   "Click the <b>Open Lid</b> button"
  # end

  # # Instructions for closing the lid
  # #
  # # @return [String]
  # def close_lid()
  #   "Click the <b>Close Lid</b> button"
  # end

  # # Instructions for starting the run
  # #
  # # @return [String]
  # def start_run()
  #   "Click the <b>Start Run</b> button"
  # end

  # # Instructions for saving an experiment file
  # #
  # # @param filename [String] the name of the file (without the full path)
  # # @return [String]
  # def save_experiment_file(filename:)
  #   "Save the experiment as #{filename} in #{params[:experiment_filepath]}"
  # end

  # # Instructions for exporting measurements from a qPCR run
  # #
  # # @return [String]
  # def export_measurements()
  #   "Click <b>Export</b><br>" +
  #   "Select <b>Export All Data Sheets</b><br>" +
  #   "Export all sheets as CSV<br>" +
  #   "Save files to the #{params[:export_filepath]} directory"
  # end
end

library: {name: TestThermocycler, category: Thermocyclers}
code_source:
# frozen_string_literal: true

needs 'Thermocyclers/AbstractThermocycler'

# Class to use as a generic qPCR thermocycler for testing
#
# @author Devin Strickland <strcklnd@uw.edu>
class TestThermocycler < AbstractThermocycler
  include QPCRMixIn

  # CONSTANTS that really shouldn't ever change
  MODEL = 'Test Model'
  PROGRAM_EXT = '.abc'
  LAYOUT_EXT =  'xyz' # Intentionally missing leading dot for test
  SOFTWARE_NAME = 'Test Software'

  # Instantiates the class
  #
  # @return [TestThermocycler]
  def initialize
    super()
  end

  # Lab-specific, user-defined parameters
  #
  # @return [Hash]
  def user_defined_params
    {
      experiment_filepath: 'Desktop/test_experiment_path',
      export_filepath: 'Desktop/test_export_path',
      image_path: 'Actions/TestThermocycler'
    }
  end

  def say_hello
    "Hello, my name is #{MODEL}"
  end
end

library: {name: ThermocyclerTemplate, category: Thermocyclers}
code_source:
# frozen_string_literal: true

needs 'Thermocyclers/AbstractThermocycler'

# Template for making new thermocycler classes
#   If you intend to make a new qPCR thermocycler class,
#   use `QPCRThermocyclerTemplate`
#
# @author Devin Strickland <strcklnd@uw.edu>
class ThermocyclerTemplate < AbstractThermocycler
  # CONSTANTS that really shouldn't ever change
  MODEL = ''

  # Instantiates the class
  #
  # @return [ThermocyclerTemplate]
  def initialize
    super()
  end

  # Lab-specific, user-defined parameters
  #
  # @return [Hash]
  def user_defined_params
    {
      experiment_filepath: 'Desktop/my_experiment_path',
      export_filepath: 'Desktop/my_export_path',
      image_path: 'Actions/ThermocyclerTemplate'
    }
  end

  ########## Language Methods
  # These methods are not very specific and will probably need to be overridden
  #   in the concrete classes.

  # # Instructions for turning on the thermocycler
  # #
  # # @return [String]
  # def turn_on()
  #   "Turn on the #{model}"
  # end

  # # Instructions for placing a plate in the instrument
  # #
  # # @param plate [Collection]
  # # @return [String]
  # def place_plate_in_instrument(plate:)
  #   "Place plate #{plate} in the thermocycler"
  # end

  # # Instructions for confirming the orientation of a plate in the instrument
  # #
  # # @return [String]
  # def confirm_plate_orientation()
  #   "MAKE SURE THAT THE PLATE IS IN THE CORRECT ORIENTATION"
  # end

  # # Instructions for opening the lid
  # #
  # # @return [String]
  # def open_lid()
  #   "Click the <b>Open Lid</b> button"
  # end

  # # Instructions for closing the lid
  # #
  # # @return [String]
  # def close_lid()
  #   "Click the <b>Close Lid</b> button"
  # end

  # # Instructions for starting the run
  # #
  # # @return [String]
  # def start_run()
  #   "Click the <b>Start Run</b> button"
  # end
end

library: {name: Thermocyclers, category: Thermocyclers}
code_source:
# frozen_string_literal: true

# Library for handling thermocyclers, including qPCR thermocyclers
# @author Devin Strickland <strcklnd@uw.edu>

needs 'Thermocyclers/TestThermocycler'
needs 'Thermocyclers/BioRadCFX96'
needs 'Thermocyclers/MiniPCRMini16'

# Helper module for standard thermocycler procedures
#
# @author Devin Strickland <strcklnd@uw.edu>
# @author Eriberto Lopez <elopez3@uw.edu>
# @note methods originally deployed as `QPCR_ThermocyclerLib`
#   on UW BIOFAB production 10/05/18
module ThermocyclerHelper
  # Steps for setting up a proram in a thermocycler
  #
  # @param thermocycler [Thermocycler]
  # @param program [PCRProgram]
  # @param composition [PCRComposition]
  # @param qpcr [Boolean] whether to call setup methods specific to a
  #   qPCR experiment: `open_software`, `set_dye`, `select_layout_template`,...
  # @return [void]
  def set_up_program(thermocycler:, program:, composition:, qpcr: false)
    show do
      title "Set Up #{thermocycler.model} Thermocycler"

      if qpcr
        note thermocycler.open_software
        image thermocycler.open_software_image
        separator

        note thermocycler.set_dye(composition: composition)
        separator

        image thermocycler.setup_workspace_image
        separator
      end

      note thermocycler.select_program_template(program: program)
      image thermocycler.setup_program_image
      separator

      if qpcr
        note thermocycler.select_layout_template(program: program)
        image thermocycler.setup_plate_layout_image
      end
    end
  end

  # Steps for loading physical tubes or plates into a thermocycler
  #
  # @param thermocycler [Thermocycler]
  # @param items [Item, Array<Item>]
  # @param filename [String] the filename to safe the experiment file
  # @return [void]
  def load_plate_and_start_run(thermocycler:, items: [],
                               experiment_filename: nil)
    # Normalize the presentation of `items`
    items = [items] if items.respond_to?(:collection?)
    plate = single_96well_plate?(items)

    show do
      title "Start Run on #{thermocycler.model} Thermocycler"

      note thermocycler.open_lid
      image thermocycler.open_lid_image
      separator

      # TODO: Make this work for plates, stripwells, and individual tubes
      if plate
        note thermocycler.place_plate_in_instrument(plate: items.first)
        warning thermocycler.confirm_plate_orientation
      else
        note 'Load the PCR tubes into the metal block'
      end
      separator

      note thermocycler.close_lid
      image thermocycler.close_lid_image
      separator

      note thermocycler.start_run
      if experiment_filename.present?
        note thermocycler.save_experiment_file(filename: experiment_filename)
      end
    end
  end

  # Export the measurements, if a qPCR thermocycler
  #
  # @param thermocycler [Thermocycler]
  # @return [void]
  def export_measurements(thermocycler:)
    show do
      title 'Export Measurements'

      note 'Once the run has finished, export the measurements'
      note thermocycler.export_measurements
      image thermocycler.export_measurements_image
    end
  end

  # TODO: A method from Eriberto Lopez's code that I haven't implemented yet
  # def upload_measurments(experiment_name)
  #   upload_filename = experiment_name + " - Quantification Summary_0.csv" # Suffix of file will always be the same
  #   up_show, up_sym = upload_show(upload_path = EXPORT_FILEPATH, upload_filename)
  #   if debug
  #     upload = Upload.find(11278) # Dummy data set
  #   else
  #     upload = find_upload_from_show(up_show, up_sym)
  #   end
  #   return upload
  # end

  private

  # Test whether an array of items is a single 96 well plate
  #
  # @param items [Array<Item>]
  # @return [Boolean]
  def single_96well_plate?(items)
    items.length == 1 && is_96well_plate?(items.first)
  end

  # Test whether an item is a 96 well plate
  #
  # @param item [Item]
  # @return [Boolean]
  def is_96well_plate?(item)
    item.collection? && item.capacity == 96
  end
end

# Factory class for building thermocycler objects
#
# @author Devin Strickland <strcklnd@uw.edu>
class ThermocyclerFactory
  # Instantiates a new `Thermocycler`
  #
  # @param model [String] the `MODEL` of the thermocycler. Must match the
  #   constant `MODEL` in an exisiting thermocycler class.
  # @return [Thermocycler]
  def self.build(model:)
    case model
    when TestThermocycler::MODEL
      TestThermocycler.new
    when BioRadCFX96::MODEL
      BioRadCFX96.new
    when MiniPCRMini16::MODEL
      MiniPCRMini16.new
    else
      msg = "Unrecognized Thermocycler Model: #{model}"
      raise ThermocyclerInputError, msg
    end
  end
end

class ThermocyclerInputError < ProtocolError; end
